ScriptName LD-Group

# macro to skip points except the very first in the group.
# assume LD is setup.

# define ref buffer 
buffer = T

#### X,Y position 
RealignToNavItem 1
# CallFunction MyFuncs::ZeroIS-quick 0.3 3.0
## now get reference into ref buffer in one of 2 ways below
# 1. just using last iamge from realign 
Copy A $buffer
# 2. if manually copied an image to ref buffer, comment out above line

## now align agaist it 
CallFunction MyFuncs::AlignToBuffer 2 $buffer

# preparation for first item in group
ReportGroupStatus 
If $repVal1 == 1 OR $repVal1 == 0
    #Call Z_byV
    #UpdateGroup Z
    AutoCenterBeam
    CallFunction MyFuncs::CycleTargetDefocus -1.2 -2.0 0.2
    G
Else 
    echo Directly shot!
Endif

# For K2, uncomment next line
# EarlyReturnNextShot 0
R
S
